PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'01'}
  expName = stroop
  logging level = warning
  Save excel file = True
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      pos = [0, 0.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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    ImageComponent image
      startVal [time (s)] = 0.5
      image [set every repeat] = $imagePath
      size = [0.5, 0.5]
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [{u'text': u'red', u'imagePath': u'images/1.jpg', u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'red', u'imagePath': u'images/2.jpg', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'imagePath': u'images/3.jpg', u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'green', u'imagePath': u'images/4.jpg', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'imagePath': u'images/5.jpg', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'blue', u'imagePath': u'images/6.jpg', u'corrAns': u'left', u'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
