PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1600, 1200]
  Full-screen window = True
  Experiment info = {u'gender': u'm', u'session': u'001', u'participant': u''}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine image_display
    ImageComponent image
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_path
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  Routine end
    TextComponent text
      text = Thank you for participating in this experiment!
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine start
    TextComponent start_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Rate this image!

        You will be shown a series of images for a few seconds, followed by a series of questions that you must answer from 1-5.

        Press space to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent text_2
      text [set every repeat] = $name
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine break_2
    KeyboardComponent break_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent break_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take a break

        Whenever you feel ready,

        please press the "space bar" to continue with the experiment.
    CodeComponent code
      Begin Experiment:
        #Set a trial counter
        myCount = 0
      Begin Routine:
        #Increase the trial counter for each routine
        myCount = myCount + 1
      Each Frame:
        if myCount not in [3,6,9,12,16]:
            continueRoutine=False
  Routine question_display
    TextComponent rating_text
      text = 1 = Not very much,  5 = Very much!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent question_text_display
      text [set every repeat] = $question_text
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent question_answer
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5'
      startVal [time (s)] = 0.0
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Flow
  Routine start
  LoopInitiator image_loop loopType="TrialHandler"
    conditionsFile = image_data.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'image_path': u'images/1.jpg'},
      {u'image_path': u'images/2.jpg'},
      {u'image_path': u'images/3.jpg'},
      {u'image_path': u'images/4.jpg'},
      {u'image_path': u'images/5.jpg'},
      {u'image_path': u'images/6.jpg'}]
    Routine break_2
    Routine fixation
    Routine image_display
    LoopInitiator question_loop loopType="TrialHandler"
      conditionsFile = question_data.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'question_text': u'How much did you like that image?'},
        {u'question_text': u'How much did you recognise the content?'},
        {u'question_text': u'How colourful was the image?'}]
      Routine question_display
    LoopTerminator question_loop
  LoopTerminator image_loop
  Routine end
