PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      text = End of demo
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fruit
    TextComponent fruit_title
      text = Fruit =
      pos = [0, 0.9]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent fruit_text
      text [set every repeat] = $fruit
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine colours
    TextComponent colour_title
      text = Colour =
      pos = [0, 0.9]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent colour_text_obj
      color [set every repeat] = $colour
      text [set every repeat] = $colour_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Nested loop demo

        Use the space bar to walk through the nested fruit and colour loop.

        Press space to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine combined
    TextComponent combined_text
      color [set every repeat] = $colour
      text [set every repeat] = $"Combined, the " + $fruit + " is " + $colour_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  LoopInitiator fruit_loop loopType="TrialHandler"
    conditionsFile = fruit.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{u'fruit': u'Apple'},
      {u'fruit': u'Banana'},
      {u'fruit': u'Pear'},
      {u'fruit': u'Melon'}]
    LoopInitiator colour_loop loopType="TrialHandler"
      conditionsFile = colours.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{u'colour': u'red', u'colour_text': u'Red'},
        {u'colour': u'green', u'colour_text': u'Green'},
        {u'colour': u'blue', u'colour_text': u'Blue'},
        {u'colour': u'yellow', u'colour_text': u'Yellow'}]
      Routine colours
      Routine fruit
      Routine combined
    LoopTerminator colour_loop
  LoopTerminator fruit_loop
  Routine end
