PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = positions
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent exit_text
      text = Press space to exit
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent polygon
      fillColor = $[0.5,0.2,1]
      pos = [0.5, 0.5]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = [0.5, 0.5]
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    GratingComponent grating
      tex = sin
      mask = circle
      pos = [-0.5, 0.8]
      phase [set every frame] = $trialClock.getTime()*2
      startVal [time (s)] = 0.0
      sf = 4
      size = [0.5, 0.5]
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    ImageComponent image
      pos = [0, -0.9]
      startVal [time (s)] = 0.0
      image = images/1.jpg
      size = [0.5, 0.5]
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    ImageComponent image_2
      pos = [0.1, -0.8]
      startVal [time (s)] = 0.0
      image = images/2.jpg
      size = [0.5, 0.5]
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    PolygonComponent polygon_2
      fillColor = $[1,0,0.3]
      pos = [-1, -1]
      startVal [time (s)] = 0.0
      nVertices = 9
      size = [0.8, 0.8]
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Flow
  Routine trial
