PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent calculation
      Begin Routine:
        answer = int(number_one) + int(number_two)
    TextComponent text_2
      text [set every repeat] = $str(number_one)+"+"+str(number_two)+"="+str(answer)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro
    TextComponent intro_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Calculator demo with code blocks

        This will pull in numbers from a data source and then add them together to give the answer.
        Press space to show each calculation.

        Press space to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text
      text = End of experiment
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = numbers.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{u'number_two': 2, u'number_one': 2},
      {u'number_two': 6, u'number_one': 4},
      {u'number_two': 1, u'number_one': 23},
      {u'number_two': 3, u'number_one': 46},
      {u'number_two': 23, u'number_one': 7},
      {u'number_two': 2, u'number_one': 4}]
    Routine trial
  LoopTerminator trials
  Routine end
