PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1600, 1200]
  Full-screen window = True
  Experiment info = {u'gender': u'm', u'session': u'001', u'participant': u''}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent text_2
      text [set every repeat] = $name
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text
      text = End of experiment
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine start
    CodeComponent setup
      Begin Experiment:
        #Determine also if we need male or female data
        #This # symbol is a comment by the way, which allows me to explain
        #what is going on here.

        #Set a default
        trialFile = "malenames.xlsx"

        #Fetch gender from the start list (which uses expInfo to find)
        gender = expInfo['gender']

        #Check if we entered f or female, and set trialFile accordingly
        if gender.strip().lower() == "f" or gender.strip().lower() == "female":
            trialFile = "femalenames.xlsx"

        #If it wasn't true, then trial file defaults to malenames.xlsx
        #Now lets carry on with the rest...
    TextComponent start_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Gender data trial example

        Based on your answer at the start, we will load in a selection of male or female names.

        Press space to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $trialFile
    isTrials = False
    loopType = random
    nReps = 1
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    Routine fixation
    Routine trial
  LoopTerminator trials
  Routine end
