PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = psychopy_demo_prog
  Screen = 1
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Routines
  Routine my_function_test
    TextComponent text_3
      text [set every repeat] = $getMonth( getRandomMonthID() )
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro
    CodeComponent code
      Begin Experiment:
        #This line tells PsychoPy to load in the month_funcs.py file
        #which is inside this very directory where the experiment is saved
        #"import *" tells it to import everything it finds inside the file
        from month_funcs import *

        #Afterwards, try opening up the month_funcs.py file in a text editor
        #Notepad++ is a good one to open Python files in.

        #The above library is fully commented, incase you would like to
        #know how it works, though some concepts covered are not
        #within the scope of this course.
    TextComponent text
      color = DarkBlue
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Code import example

        This demo imports a custom Python library of functions that we have created.  These are then used in our routine.  Press space to go through 5 random months.

        Press space to start
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      text = End of experiment
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine intro
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine my_function_test
  LoopTerminator trials_2
  Routine end
