PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent Question_text
      text [set every repeat] = $question
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Rating_scale
      text = (1 = Very Low, 5 = Very High)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent question_answer
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5'
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Branching example

        Rate each question from 1-5.  If you enter 5, you will be prompted with another extra question!

        Press space to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      text = End of demo
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine extra_question
    CodeComponent do_question
      Each Frame:
        #If our answer was less than 5, then we skip this routine!
        if int(question_answer.keys) < 5:
            continueRoutine=False
    TextComponent text_3
      text = Do you really mean that?? (Y/N)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent extra_answer
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = questions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'question': u'How fun are you finding this? '},
      {u'question': u'Is this a useful experiment?'},
      {u'question': u'How asleep are you?'}]
    Routine trial
    Routine extra_question
  LoopTerminator trials
  Routine end
