PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s_%s' %(expInfo['participant'],expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = testBreakDemo
  Units = use prefs
  Screen = 1
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Routines
  Routine gretting
    TextComponent Counter
      text [set every repeat] = $myCount+1
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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  Routine Break
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = nothing
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    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take a break

        Whenever you feel ready,

        please press the "space bar" to continue with the experiment.
    CodeComponent code_2
      Begin Experiment:
        #Set a trial counter
        myCount = 0
      Begin Routine:
        #Increase the trial counter for each routine
        myCount = myCount + 1
      Each Frame:
        #If our trial is not at any of these trials, then skip this
        #routine with the break text, so user never sees it.
        if myCount not in [12,24,36]:
            continueRoutine=False
  Routine Instructions_11
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is an example of a break every 12 trials.

        The number counter is representative of a trial.

        Press space to start!
    KeyboardComponent key_resp_15
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine Instructions_11
  LoopInitiator blockLoop loopType="TrialHandler"
    loopType = random
    nReps = 48
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    Routine Break
    Routine gretting
  LoopTerminator blockLoop
